PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = MusicAffectPsychophysiology2019
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Routines
  Routine beginstudy
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now that the practice is finished the experiment will begin. This will take about 40 minutes. You will be told by the program when the experiment is over

        Press any key to begin the study
    KeyboardComponent advance
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine PracMusic
    SoundComponent practice
      sound = prac.wav
      startVal [time (s)] = 0
      volume = 2
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    CodeComponent PracMark
      Code Type = Py
      Begin Experiment:
        import serial
        port = serial.Serial(port = "/dev/tty.usbserial-BBTKUSBTTL",
                            baudrate = 115200,
                            timeout=1)
      Begin Routine:
        port.write('10'.encode())
      End Experiment:
        ser.close()
      End Routine:
        port.write("00".encode())
  Routine end
    TextComponent MusicEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        All the music has now been listened to. Please click on the following link to fill out some final questions.

        Press any key to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine music
    SoundComponent playsong
      sound [set every repeat] = $song
      startVal [time (s)] = 0.0
      volume = 2
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    CodeComponent mark
      Code Type = Py
      Begin Routine:
        port.write('10'.encode())
      End Routine:
        port.write("00". encode())
  Routine instru
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You are about to listen to a series of songs. After listening to each song you will be asked to make judgements about how the song made you feel in terms of pleasantness and arousal (energy/awakeness).

        First, you will complete a practice trial so you can get an understanding of what you will be doing in the experiment

        Please press any key to continue
    KeyboardComponent begin
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine arousal
    TextComponent arousaltext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        how aroused/energised did you feel after listening to this song?

        1 (Not at all)
        2 (Slightly)
        3 (Moderately)
        4 (Very)
        5 (Extremely)
    KeyboardComponent arousalkey
      allowedKeys = '1', '2','3','4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine valence
    TextComponent valencetext
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        How positive/pleasant did you feel after listening to this song?

        1 (Not at all)
        2 (Slightly)
        3 (Moderately)
        4 (Very)
        5 (Extremely)
    KeyboardComponent valencekey
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Differentiation
    TextComponent WordInstruction
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $Instruction
    KeyboardComponent WordResponse
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent WordScale
      letterHeight = 0.1
      pos = (0, -.3)
      startVal [time (s)] = 0.0
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      text:
        1 (Not at all)
        2 (Slightly)
        3 (Moderately)
        4 (Very)
        5 (Extremely)
    TextComponent EmoWord
      letterHeight = 0.1
      pos = (0, .3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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  Routine liking
    TextComponent like
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        How much did you like this song?

        1 (Not at all)
        2 (Slightly)
        3 (Moderately)
        4 (Very)
        5 (Extremely)
    KeyboardComponent likekey
      allowedKeys = '1', '2', '3', '4', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine musicbreak
    TextComponent betweensongs
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = +
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Flow
  Routine instru
  Routine PracMusic
  Routine arousal
  Routine valence
  Routine liking
  LoopInitiator pracwords loopType="TrialHandler"
    conditionsFile = EMOTIONWORDS.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'SAD')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ANXIOUS ')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ANGRY')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'FRUSTRATED')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ASHAMED')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'GUILTY')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'HAPPY')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'EXCITED')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ALERT')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ACTIVE')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'TENDER')]),
      OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'SCARED')])]
    Routine Differentiation
  LoopTerminator pracwords
  Routine beginstudy
  LoopInitiator songtrials loopType="TrialHandler"
    conditionsFile = Music.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('song', '30MonoWAV/30MonoF1.wav'), ('valence', 1), ('arousal', 2), ('marker', 20)]),
      OrderedDict([('song', '30MonoWAV/30MonoF2.wav'), ('valence', 1), ('arousal', 2), ('marker', 21)]),
      OrderedDict([('song', '30MonoWAV/30MonoF3.wav'), ('valence', 1), ('arousal', 2), ('marker', 22)]),
      OrderedDict([('song', '30MonoWAV/30MonoF4.wav'), ('valence', 1), ('arousal', 2), ('marker', 23)]),
      OrderedDict([('song', '30MonoWAV/30MonoH1.wav'), ('valence', 2), ('arousal', 2), ('marker', 24)]),
      OrderedDict([('song', '30MonoWAV/30MonoH2.wav'), ('valence', 2), ('arousal', 2), ('marker', 25)]),
      OrderedDict([('song', '30MonoWAV/30MonoH3.wav'), ('valence', 2), ('arousal', 2), ('marker', 26)]),
      OrderedDict([('song', '30MonoWAV/30MonoH4.wav'), ('valence', 2), ('arousal', 2), ('marker', 27)]),
      OrderedDict([('song', '30MonoWAV/30MonoS1.wav'), ('valence', 1), ('arousal', 1), ('marker', 28)]),
      OrderedDict([('song', '30MonoWAV/30MonoS2.wav'), ('valence', 1), ('arousal', 1), ('marker', 29)]),
      OrderedDict([('song', '30MonoWAV/30MonoS3.wav'), ('valence', 1), ('arousal', 1), ('marker', 30)]),
      OrderedDict([('song', '30MonoWAV/30MonoS4.wav'), ('valence', 1), ('arousal', 1), ('marker', 31)]),
      OrderedDict([('song', '30MonoWAV/30MonoT1.wav'), ('valence', 2), ('arousal', 1), ('marker', 32)]),
      OrderedDict([('song', '30MonoWAV/30MonoT2.wav'), ('valence', 2), ('arousal', 1), ('marker', 33)]),
      OrderedDict([('song', '30MonoWAV/30MonoT3.wav'), ('valence', 2), ('arousal', 1), ('marker', 34)])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
    Routine music
    Routine arousal
    Routine valence
    Routine liking
    LoopInitiator words loopType="TrialHandler"
      conditionsFile = EMOTIONWORDS.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'SAD')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ANXIOUS ')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ANGRY')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'FRUSTRATED')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ASHAMED')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'GUILTY')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'HAPPY')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'EXCITED')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ALERT')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'ACTIVE')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'TENDER')]),
        OrderedDict([('Instruction', 'To what extent did the music make you feel '), ('Word', 'SCARED')])]
      Routine Differentiation
    LoopTerminator words
    Routine musicbreak
  LoopTerminator songtrials
  Routine end
